OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Important : Do not forget to
  change the settings in the Generic stream reader to load
  the file you recorded in the previous step. By default the
  scenario uses example data provided with OpenViBE.
Comment
  Signal processing for the first stimulation frequency
Comment
  Signal processing for the second stimulation frequency

Generic stream reader => #0
  Filename = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Signals/Recorded_Signal(2020.07.28-02.40.58).ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter "Frequency 2" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/Configuration/temporal-filter-freq-2.cfg
#1.Output stream 2 -> Target Separator => #3
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#2, Input stimulations=#3.Stimulations -> Stimulation based epoching "SBE" => #4
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Input signal=#2, Input stimulations=#3.New output -> Stimulation based epoching "SBE" => #5
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Stimulations=#1.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer => #6
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #7
#7.Output stream 1 -> Temporal filter "Frequency 1" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/temporal-filter-freq-1.cfg
Data=#7.Output stream 1, Stimulations=#7.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7.Output stream 2 -> Target Separator => #10
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Scripts/Lua/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#8, Input stimulations=#10.Stimulations -> Stimulation based epoching "SBE" => #11
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Input signal=#8, Input stimulations=#10.New output -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Stimulations=#7.Output stream 2, Signal condition 1=#11, Signal condition 2=#12 -> CSP Spatial Filter Trainer => #13
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
New input=#13, New input(2)=#6 -> FlipSwitch
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop

0x341d3912 Generic stream reader => #16
  Filename = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/signals/bci-ssvep-training.ov
Input stream 1=#16.Output stream 2, Input stream 2=#16.Output stream 3 -> 0x341d3912 Identity => #17
Input stream 1=#17.Output stream 1, Input stream 2=#17.Output stream 2 -> 0x341d3912 Identity => #18
#18.Output stream 1 -> 0x341d3912 Temporal filter "Frequency 1" => #19
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/configuration/temporal-filter-freq-1.cfg
#18.Output stream 2 -> 0x341d3912 Target Separator => #20
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#19, Input stimulations=#20.Stimulations -> 0x341d3912 Stimulation based epoching "SBE" => #21
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Input signal=#19, Input stimulations=#20.New output -> 0x341d3912 Stimulation based epoching "SBE" => #22
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Stimulations=#18.Output stream 2, Signal condition 1=#21, Signal condition 2=#22 -> 0x341d3912 CSP Spatial Filter Trainer => #23
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
Data=#18.Output stream 1, Stimulations=#18.Output stream 2 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input stream 1=#17.Output stream 1, Input stream 2=#17.Output stream 2 -> 0x341d3912 Identity => #25
#25.Output stream 1 -> 0x341d3912 Temporal filter "Frequency 2" => #26
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/configuration/temporal-filter-freq-2.cfg
#25.Output stream 2 -> 0x341d3912 Target Separator => #27
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#26, Input stimulations=#27.Stimulations -> 0x341d3912 Stimulation based epoching "SBE" => #28
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Input signal=#26, Input stimulations=#27.New output -> 0x341d3912 Stimulation based epoching "SBE" => #29
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Stimulations=#25.Output stream 2, Signal condition 1=#28, Signal condition 2=#29 -> 0x341d3912 CSP Spatial Filter Trainer => #30
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2.cfg
  Filter dimension = 2
  Save as box config = true
New input=#23, New input(1)=#30 -> 0x341d3912 FlipSwitch
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/classifier-training-flipswitch.lua
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
