OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  this Scenario used for checking signal and make sure that Acquisition clinet is connected to server
Comment
  Plot the raw input signals
Comment
  filter the data with butterworth filter with low cut freq of 6Hz and high cut freq 40Hz
Comment
  Plot the filter input signals
Comment
  Performs a Spectral Analysis using FFT

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#0.Signal stream -> Signal display "Raw Signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal Filter => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 40.000000
  Pass band ripple (dB) = 0.500000
-> Time Based Epoching
  Epoch 1 duration (in sec) = 2.000000
  Epoch 1 intervals (in sec) = 0.500000
-> Spectral Analysis => #4
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#4.Amplitude -> Instant Bars
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = false
  Gain = 1
  Caption =
  Translucency = 1
  Color = ${AdvancedViz_DefaultColorGradient}
Data=#2 -> Signal display "Filtered signals"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Horizontal ruler = true
  Vertical ruler = false
  Multiview = false
