OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2 -> Identity => #2
#2.Output stream 2 -> Target Separator => #3
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
#2.Output stream 1 -> Temporal filter "Frequency 1-3" => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 59.75
  High cut frequency (Hz) = 60.25
  Pass band ripple (dB) = 0.500000
Input signal=#4, Input stimulations=#3.Stimulations -> Stimulation based epoching "SBE" => #5
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#4, Input stimulations=#3.New output -> Stimulation based epoching "SBE" => #6
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#2.Output stream 2, Signal condition 1=#5, Signal condition 2=#6 -> CSP Spatial Filter Trainer => #7
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1-3.cfg
  Filter dimension = 2
  Save as box config = true
#2.Output stream 1 -> Temporal filter "Frequency 1-2" => #8
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 39.75
  High cut frequency (Hz) = 40.25
  Pass band ripple (dB) = 0.500000
Input signal=#8, Input stimulations=#3.Stimulations -> Stimulation based epoching "SBE" => #9
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#8, Input stimulations=#3.New output -> Stimulation based epoching "SBE" => #10
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#2.Output stream 2, Signal condition 1=#9, Signal condition 2=#10 -> CSP Spatial Filter Trainer => #11
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1-2.cfg
  Filter dimension = 2
  Save as box config = true
#2.Output stream 1 -> Temporal filter "Frequency 1-1" => #12
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-1.cfg
Input signal=#12, Input stimulations=#3.Stimulations -> Stimulation based epoching "SBE" => #13
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#12, Input stimulations=#3.New output -> Stimulation based epoching "SBE" => #14
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#2.Output stream 2, Signal condition 1=#13, Signal condition 2=#14 -> CSP Spatial Filter Trainer => #15
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-1-1.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2 -> Identity => #16
#16.Output stream 2 -> Target Separator => #17
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
#16.Output stream 1 -> Temporal filter "Frequency 3-3" => #18
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 35.75
  High cut frequency (Hz) = 36.25
  Pass band ripple (dB) = 0.500000
Input signal=#18, Input stimulations=#17.New output -> Stimulation based epoching "SBE" => #19
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#18, Input stimulations=#17.Stimulations -> Stimulation based epoching "SBE" => #20
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#16.Output stream 2, Signal condition 1=#20, Signal condition 2=#19 -> CSP Spatial Filter Trainer => #21
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-3-3.cfg
  Filter dimension = 2
  Save as box config = true
#16.Output stream 1 -> Temporal filter "Frequency 3-2" => #22
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 23.75
  High cut frequency (Hz) = 24.25
  Pass band ripple (dB) = 0.500000
Input signal=#22, Input stimulations=#17.Stimulations -> Stimulation based epoching "SBE" => #23
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#22, Input stimulations=#17.New output -> Stimulation based epoching "SBE" => #24
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#16.Output stream 2, Signal condition 1=#23, Signal condition 2=#24 -> CSP Spatial Filter Trainer => #25
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-3-2.cfg
  Filter dimension = 2
  Save as box config = true
#16.Output stream 1 -> Temporal filter "Frequency 3-1" => #26
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-3.cfg
Input signal=#26, Input stimulations=#17.Stimulations -> Stimulation based epoching "SBE" => #27
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#26, Input stimulations=#17.New output -> Stimulation based epoching "SBE" => #28
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#16.Output stream 2, Signal condition 1=#27, Signal condition 2=#28 -> CSP Spatial Filter Trainer => #29
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-3-1.cfg
  Filter dimension = 2
  Save as box config = true
Input stream 1=#1.Output stream 1, Input stream 2=#1.Output stream 2 -> Identity => #30
#30.Output stream 2 -> Target Separator => #31
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
#30.Output stream 1 -> Temporal filter "Frequency 2-3" => #32
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 44.75
  High cut frequency (Hz) = 45.25
  Pass band ripple (dB) = 0.500000
Input signal=#32, Input stimulations=#31.Stimulations -> Stimulation based epoching "SBE" => #33
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#32, Input stimulations=#31.New output -> Stimulation based epoching "SBE" => #34
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#30.Output stream 2, Signal condition 1=#33, Signal condition 2=#34 -> CSP Spatial Filter Trainer => #35
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2-3.cfg
  Filter dimension = 2
  Save as box config = true
#30.Output stream 1 -> Temporal filter "Frequency 2-2" => #36
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.75
  High cut frequency (Hz) = 30.25
  Pass band ripple (dB) = 0.500000
Input signal=#36, Input stimulations=#31.Stimulations -> Stimulation based epoching "SBE" => #37
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#36, Input stimulations=#31.New output -> Stimulation based epoching "SBE" => #38
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#30.Output stream 2, Signal condition 1=#37, Signal condition 2=#38 -> CSP Spatial Filter Trainer => #39
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2-2.cfg
  Filter dimension = 2
  Save as box config = true
#30.Output stream 1 -> Temporal filter "Frequency 2-1" => #40
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/temporal-filter-freq-2.cfg
Input signal=#40, Input stimulations=#31.Stimulations -> Stimulation based epoching "SBE" => #41
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Input signal=#40, Input stimulations=#31.New output -> Stimulation based epoching "SBE" => #42
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
Stimulations=#30.Output stream 2, Signal condition 1=#41, Signal condition 2=#42 -> CSP Spatial Filter Trainer => #43
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = ${Player_ScenarioDirectory}/classifiers/csp-2-1.cfg
  Filter dimension = 2
  Save as box config = true
New input=#15, New input(1)=#11, New input(2)=#7, New input(3)=#35, New input(4)=#39, New input(5)=#43, New input(6)=#21, New input(7)=#25, New input(8)=#29 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
