OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature extraction

  Finally the classifier receives values of amplitude for
  stimulated and non-stimulated periods and trains to distinguish
  the two.

  One classifier is trained per each stimulation frequency.

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter "Frequency 1-3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 59.75
  High cut frequency (Hz) = 60.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-1-3.cfg
#1.Output stream 1 -> Temporal filter "Frequency 1-2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 39.75
  High cut frequency (Hz) = 40.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #7
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-1-2.cfg
#1.Output stream 1 -> Temporal filter "Frequency 1-1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19.75
  High cut frequency (Hz) = 20.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #10
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-1-1.cfg
Input 1=#4, Input 2=#7, Input 3=#10 -> Signal Merger => #11
Input stream 1=#11, Input stream 2=#1.Output stream 2 -> Identity => #12
#12.Output stream 2 -> Target Separator => #13
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#12.Output stream 1, Input stimulations=#13.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #19
Input signal=#12.Output stream 1, Input stimulations=#13.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #25
Stimulations=#12.Output stream 2, Features for class 1=#19, Features for class 2=#25 -> Classifier trainer => #26
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#1.Output stream 1 -> Temporal filter "Frequency 2-3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 44.75
  High cut frequency (Hz) = 45.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #29
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-2-3.cfg
#1.Output stream 1 -> Temporal filter "Frequency 2-2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.75
  High cut frequency (Hz) = 30.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #32
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-2-2.cfg
#1.Output stream 1 -> Temporal filter "Frequency 2-1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #35
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-2-1.cfg
Input 1=#29, Input 2=#32, Input 3=#35 -> Signal Merger => #36
Input stream 1=#36, Input stream 2=#1.Output stream 2 -> Identity => #37
#37.Output stream 2 -> Target Separator => #38
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#37.Output stream 1, Input stimulations=#38.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #44
Input signal=#37.Output stream 1, Input stimulations=#38.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #50
Stimulations=#37.Output stream 2, Features for class 1=#44, Features for class 2=#50 -> Classifier trainer => #51
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-2.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#1.Output stream 1 -> Temporal filter "Frequency 3-1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11.75
  High cut frequency (Hz) = 12.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #54
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-3-1.cfg
#1.Output stream 1 -> Temporal filter "Frequency 3-3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 35.75
  High cut frequency (Hz) = 36.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #57
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-3-3.cfg
#1.Output stream 1 -> Temporal filter "Frequency 3-2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 23.75
  High cut frequency (Hz) = 24.25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference
-> Spatial Filter => #60
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-3-2.cfg
Input 1=#57, Input 2=#60, Input 3=#54 -> Signal Merger => #61
Input stream 1=#61, Input stream 2=#1.Output stream 2 -> Identity => #62
#62.Output stream 2 -> Target Separator => #63
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 3
  Non Targets = 0 1 2
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#62.Output stream 1, Input stimulations=#63.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #69
Input signal=#62.Output stream 1, Input stimulations=#63.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #75
Stimulations=#62.Output stream 2, Features for class 1=#69, Features for class 2=#75 -> Classifier trainer => #76
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-3.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
New input=#26, New input(1)=#51, New input(2)=#76 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
