OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = ${Path_Data}/scenarios/signals/bci-ssvep-training.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-3-3.cfg
-> Temporal filter "Frequency 3-3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 35
  High cut frequency (Hz) = 37
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #4
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-3-2.cfg
-> Temporal filter "Frequency 3-2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 23
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #7
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-3-1.cfg
-> Temporal filter "Frequency 3-1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 11
  High cut frequency (Hz) = 13
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #10
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-1-2.cfg
-> Temporal filter "Frequency 1-2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 39
  High cut frequency (Hz) = 41
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #13
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-2-1.cfg
-> Temporal filter "Frequency 2-1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #16
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-1-3.cfg
-> Temporal filter "Frequency 1-3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 59
  High cut frequency (Hz) = 61
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #19
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-1-1.cfg
-> Temporal filter "Frequency 1-1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 19
  High cut frequency (Hz) = 21
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #22
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-2-3.cfg
-> Temporal filter "Frequency 2-3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 44
  High cut frequency (Hz) = 46
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #25
#1.Output stream 1 -> Spatial Filter
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/classifiers/csp-2-2.cfg
-> Temporal filter "Frequency 2-2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29
  High cut frequency (Hz) = 31
  Pass band ripple (dB) = 0.500000
-> Common Average Reference => #28
Input stream 2=#1.Output stream 2 -> Identity => #29
#29.Output stream 2 -> Target Separator => #30
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#10, Input stimulations=#30.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #35
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #36
Input signal=#7, Input stimulations=#30.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #41
  Equation = log(1+x)
Input signal=#4, Input stimulations=#30.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #46
  Equation = log(1+x)
Input stream 1=#41, Input stream 2=#35, Input stream 3=#46 -> Feature aggregator => #47
#46 -> 0x341d3912 Feature aggregator => #48
Input signal=#4, Input stimulations=#30.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #53
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #54
Input signal=#7, Input stimulations=#30.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #59
  Equation = log(1+x)
Input signal=#10, Input stimulations=#30.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #64
  Equation = log(1+x)
Input stream 1=#59, Input stream 2=#53, Input stream 3=#64 -> Feature aggregator => #65
Stimulations=#29.Output stream 2, Features for class 1=#47, Features for class 2=#65 -> Classifier trainer => #66
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#64 -> 0x341d3912 Feature aggregator => #67
Stimulations=#29.Output stream 2, Features for class 1=#36, Features for class 2=#47, Features for class 3=#48, Features for class 4=#54, Features for class 5=#65, Features for class 6=#67 -> 0x341d3912 Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_01
  Class 3 label = OVTK_StimulationId_Label_01
  Class 4 label = OVTK_StimulationId_Label_02
  Class 5 label = OVTK_StimulationId_Label_02
  Class 6 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Input stream 2=#1.Output stream 2 -> Identity => #69
#69.Output stream 2 -> Target Separator => #70
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#16, Input stimulations=#70.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #75
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #76
Input signal=#28, Input stimulations=#70.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #81
  Equation = log(1+x)
Input signal=#25, Input stimulations=#70.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #86
  Equation = log(1+x)
Input stream 1=#81, Input stream 2=#75, Input stream 3=#86 -> Feature aggregator => #87
#86 -> 0x341d3912 Feature aggregator => #88
Input signal=#25, Input stimulations=#70.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #93
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #94
Input signal=#28, Input stimulations=#70.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #99
  Equation = log(1+x)
Input signal=#16, Input stimulations=#70.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #104
  Equation = log(1+x)
Input stream 1=#99, Input stream 2=#93, Input stream 3=#104 -> Feature aggregator => #105
Stimulations=#69.Output stream 2, Features for class 1=#87, Features for class 2=#105 -> Classifier trainer => #106
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
#104 -> 0x341d3912 Feature aggregator => #107
Stimulations=#69.Output stream 2, Features for class 1=#76, Features for class 2=#87, Features for class 3=#88, Features for class 4=#94, Features for class 5=#105, Features for class 6=#107 -> 0x341d3912 Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_01
  Class 3 label = OVTK_StimulationId_Label_01
  Class 4 label = OVTK_StimulationId_Label_02
  Class 5 label = OVTK_StimulationId_Label_02
  Class 6 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
Input stream 2=#1.Output stream 2 -> Identity => #109
#109.Output stream 2 -> Target Separator => #110
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#22, Input stimulations=#110.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #115
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #116
Input signal=#13, Input stimulations=#110.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #121
  Equation = log(1+x)
Input signal=#19, Input stimulations=#110.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #126
  Equation = log(1+x)
Input stream 1=#121, Input stream 2=#115, Input stream 3=#126 -> Feature aggregator => #127
#126 -> 0x341d3912 Feature aggregator => #128
Input signal=#19, Input stimulations=#110.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #133
  Equation = log(1+x)
-> 0x341d3912 Feature aggregator => #134
Input signal=#13, Input stimulations=#110.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #139
  Equation = log(1+x)
Input signal=#22, Input stimulations=#110.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = ${Player_ScenarioDirectory}/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP" => #144
  Equation = log(1+x)
Input stream 1=#139, Input stream 2=#133, Input stream 3=#144 -> Feature aggregator => #145
Stimulations=#109.Output stream 2, Features for class 1=#127, Features for class 2=#145 -> Classifier trainer => #146
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Support Vector Machine (SVM)
  Epsilon = 0.100000
  Weight =
  SVM type = C-SVC
  Degree = 3
  Kernel type = Radial basis function
  Weight Label =
  Epsilon tolerance = 0.001000
  Cost = 1.000000
  Cache size = 100.000000
  Gamma = 0.000000
  Nu = 0.500000
  Shrinking = true
  Coef 0 = 0.000000
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
New input=#146, New input(1)=#106, New input(2)=#66 -> FlipSwitch
  Lua Script = ${Player_ScenarioDirectory}/scripts/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
#144 -> 0x341d3912 Feature aggregator => #149
Stimulations=#109.Output stream 2, Features for class 1=#116, Features for class 2=#127, Features for class 3=#128, Features for class 4=#134, Features for class 5=#145, Features for class 6=#149 -> 0x341d3912 Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = ${Player_ScenarioDirectory}/classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_01
  Class 3 label = OVTK_StimulationId_Label_01
  Class 4 label = OVTK_StimulationId_Label_02
  Class 5 label = OVTK_StimulationId_Label_02
  Class 6 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
