OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Scenario description

  This scenario must be run at least once before
  running any further SSVEP scenarios

  This is a scenario where you can configure your SSVEP experiment. There
  are two boxes containing configuration parameters:

  Peripheral Settings

  Experiment Settings

  For more detailed description please refer to the SSVEP
  documentation page.
Comment
  Peripheral Settings

  Settings in this box must match your hardware configuration.
  Currently, the only supported setting is the screen refresh rate.

  Screen Refresh Rate :  The refresh rate of your screen,
  refer to your screen's user manual to find this value.

  Important notice

  Your screen will be able to reproduce only frequencies which
  are result of division of your screen refresh rate by an
  integer.
Comment
  Peripheral Settings

  Settings in this box must match your hardware configuration.
  Currently, the only supported setting is the screen refresh rate.

  Screen Refresh Rate :  The refresh rate of your screen,
  refer to your screen's user manual to find this value.

  Important notice

  Your screen will be able to reproduce only frequencies which
  are result of division of your screen refresh rate by an
  integer.
Comment
  Experiment Settings

  Settings concerning the SSVEP experiment in general.

  Target Light Color and Target Dark Color represent
  the two colors which will be used to generate the flickering of
  the targets. The notation Light and Dark is arbitrary, however on
  frequencies using odd number of frames will use more frames to
  represent the Light color.

  Screen Refresh Rate :  The refresh rate of your screen,
  refer to your screen's user manual to find this value.

  Important notice

  Your screen will be able to reproduce only frequencies which
  are result of division of your screen refresh rate by an
  integer.

  Stimulation Frequencies A comma separated list of
  frequencies used for the stimulation. Refer to the documentation
  for more details.

  Processing Epoch Duration The length of the slice of the signal
  which will be used to find SSVEP response. With longer duration precision
  will increase at the detriment of the lag.

  Processing Epoch Interval The speed interval between slices of the
  signal.

  Processing Frequency Tolerance The width of the frequency band
  around the stimulation frequency used for classification.
Comment
  Experiment Settings

  Settings concerning the SSVEP experiment in general.

  Target Light Color and Target Dark Color represent
  the two colors which will be used to generate the flickering of
  the targets. The notation Light and Dark is arbitrary, however on
  frequencies using odd number of frames will use more frames to
  represent the Light color.

  Stimulation Frequencies A comma separated list of
  frequencies used for the stimulation. Refer to the documentation
  for more details.

  Processing Epoch Duration The length of the slice of the signal
  which will be used to find SSVEP response. With longer duration precision
  will increase at the detriment of the lag.

  Processing Epoch Interval The speed interval between slices of the
  signal.

  Processing Frequency Tolerance The width of the frequency band
  around the stimulation frequency used for classification.

0x341d3912 Display Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/configuration-peripheral-settings.lua
  Screen Refresh Rate = 60
  Window Width = 800
  Window Height = 600
  Fullscreen = true
-> 0x341d3912 EEG Input Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/configuration-eeg-input-settings.lua
  Channels = :
  Selection Method = Select
  Match Method = Smart
  Training Data File = ${Player_ScenarioDirectory}/signals/ssvep-record-current.ov
  Testing Data File = ${Player_ScenarioDirectory}/signals/ssvep-record-current.ov
-> 0x341d3912 Experiment Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/configuration-experiment-settings.lua
  Target Light Color = 100,0,0
  Target Dark Color = 10,0,0
  Stimulation Frequencies = 5.454545;6.6666;7.5
  Processing Epoch Duration = 1
  Processing Epoch Interval = 0.1
  Processing Frequency Tolerance = 0.25
  CSP Spatial Filter Order = 2
  Focus Point = false
-> 0x341d3912 Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop

Peripheral Settings
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/configuration-peripheral-settings.lua
  Screen Refresh Rate = 60
-> Experiment Settings
  Lua Script = ${Player_ScenarioDirectory}/scripts/Lua/configuration-experiment-settings.lua
  Target Light Color = 0,100,0
  Target Dark Color = 100,100,100
  Stimulation Frequencies = 10;12
  Processing Epoch Duration = 0.5
  Processing Epoch Interval = 0.1
  Processing Frequency Tolerance = 0.250
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
