OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  butter filt
Comment
  Car Filt

Sinus oscillator => #0
  Channel count = 2
  Sampling frequency = 64
  Generated epoch sample count = 32
-> Common Average Reference => #1
Data=#1 -> Signal display "ov"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0 -> car filter => #4
  Box clock frequency in Hz = 64
  Matlab executable (path) = C:/Program Files/MATLAB/R2018a/bin/win64/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = carinit
  Process function = carpros
  Uninitialize function = carunin
Data=#4 -> Signal display "mat"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Acquisition client
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024

0x341d3912 Sinus oscillator => #7
  Channel count = 2
  Sampling frequency = 128
  Generated epoch sample count = 32
-> 0x341d3912 Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 3
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Data=#8 -> 0x341d3912 Signal display "OV"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#7 -> 0x341d3912 butter filt mat => #10
  Box clock frequency in Hz = 32
  Matlab executable (path) = C:/Program Files/MATLAB/R2018a/bin/win64/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = butterinit
  Process function = butterpros
  Uninitialize function = butterunin
  Sample rate = 128
  fl = 8
  fh = 40
Data=#10 -> 0x341d3912 Signal display "mat"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#7 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
