OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

0x341d3912 Sinus oscillator => #0
  Channel count = 1
  Sampling frequency = 512
  Generated epoch sample count = 32
-> 0x341d3912 mean => #1
  Clock frequency (Hz) = 32
  Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Testing Scenarios/Python/my test script/carFilter.py
Data=#1 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#0 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false

0x341d3912 Sinus generator
  Clock frequency (Hz) = 16
  Script = ${Player_ScenarioDirectory}/scripts/python-sinus-oscillator.py
  Channel count = 4
  Sampling frequency = 512
  Generated epoch sample count = 32

Sinus oscillator => #5
  Channel count = 2
  Sampling frequency = 128
  Generated epoch sample count = 32
Data=#5 -> Signal display "!!!"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#5 -> Python scripting => #7
  Clock frequency (Hz) = 32
  Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Testing Scenarios/Python/my test script/carFilter.py
Data=#7 -> Signal display "car filt plot"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
