OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = C:/Users/arashharatian/Desktop/zz/new naseri/ssvep-record-[2020.08.04-21.04.20].ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter "Frequency 1" => #2
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 29.625000
  High cut frequency (Hz) = 30.375000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/temporal-filter-freq-1.cfg
#1.Output stream 2 -> Target Separator => #3
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Scripts/Lua/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#2, Input stimulations=#3.Stimulations -> Stimulation based epoching "SBE" => #4
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Input signal=#2, Input stimulations=#3.New output -> Stimulation based epoching "SBE" => #5
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Configuration/stimulation-based-epoching.cfg
Stimulations=#1.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Classifiers/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
