OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  Feature vector containing signal
  during stimulated periods.
Comment
  Feature vector containing signal
  during non-stimulated periods.

Generic stream reader => #0
  Filename = C:/Users/arashharatian/Desktop/zz/new naseri/ssvep-record-[2020.08.04-21.04.20].ov
#0.Output stream 2 -> Temporal filter "freq 3"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 44.75
  High Cut-off Frequency (Hz) = 45.25
  Band Pass Ripple (dB) = 0.5
-> Spatial Filter => #2
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/classifiers/csp-1-2.cfg
#0.Output stream 2 -> Temporal filter "freq 2"
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 29.75
  High Cut-off Frequency (Hz) = 30.25
  Band Pass Ripple (dB) = 0.5
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/classifiers/csp-1-1.cfg
#0.Output stream 2 -> Temporal filter "Frequency 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #6
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/classifiers/csp-1.cfg
Input 1=#2, Input 2=#4, Input 3=#6 -> Signal Merger => #7
#0.Output stream 3 -> Target Separator => #8
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/classifier-training-target-separator.lua
  Targets = 1
  Non Targets = 0 2 3
  Output Stimulation = OVTK_StimulationId_Target
Input signal=#7, Input stimulations=#8.New output -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #14
Input signal=#7, Input stimulations=#8.Stimulations -> Stimulation based epoching "SBE"
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
-> Time based epoching "TBE"
  Epoch 1 duration (in sec) = 0.5
  Epoch 1 intervals (in sec) = 0.1
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/time-based-epoching.cfg
-> Simple DSP "DSP"
  Equation = x*x
-> Signal average "Sg Avg"
-> Simple DSP "DSP"
  Equation = log(1+x)
-> Feature aggregator => #20
Stimulations=#0.Output stream 3, Features for class 1=#20, Features for class 2=#14 -> Classifier trainer
  Train trigger = OVTK_StimulationId_ExperimentStop
  Filename to save configuration to = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Classifiers/classifier-1.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_StimulationId_Label_01
  Class 2 label = OVTK_StimulationId_Label_02
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 10
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
