OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = C:/Users/arashharatian/Desktop/zz/new naseri/ssvep-record-[2020.08.04-21.04.20].ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 2 -> Target Separator => #2
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Scripts/Lua/classifier-training-target-separator.lua
  Targets = 2
  Non Targets = 0 1 3
  Output Stimulation = OVTK_StimulationId_Target
#1.Output stream 1 -> Temporal filter "freq 3" => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 44.75
  High Cut-off Frequency (Hz) = 45.25
  Band Pass Ripple (dB) = 0.5
Input signal=#3, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE" => #4
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
Input signal=#3, Input stimulations=#2.New output -> Stimulation based epoching "SBE" => #5
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
Stimulations=#1.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer => #6
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Classifiers/csp-1-2.cfg
  Filter dimension = 2
  Save as box config = true
#1.Output stream 1 -> Temporal filter "Frequency 1" => #7
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.75
  High cut frequency (Hz) = 15.25
  Pass band ripple (dB) = 0.500000
Input signal=#7, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE" => #8
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
Input signal=#7, Input stimulations=#2.New output -> Stimulation based epoching "SBE" => #9
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
Stimulations=#1.Output stream 2, Signal condition 1=#8, Signal condition 2=#9 -> CSP Spatial Filter Trainer => #10
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Classifiers/csp-1.cfg
  Filter dimension = 2
  Save as box config = true
#1.Output stream 1 -> Temporal filter "freq 2" => #11
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 29.75
  High Cut-off Frequency (Hz) = 30.25
  Band Pass Ripple (dB) = 0.5
Input signal=#11, Input stimulations=#2.Stimulations -> Stimulation based epoching "SBE" => #12
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
Input signal=#11, Input stimulations=#2.New output -> Stimulation based epoching "SBE" => #13
  Epoch duration (in sec) = 6.000000
  Epoch offset (in sec) = 1.000000
  Stimulation to epoch from = OVTK_StimulationId_Target
  0x8d21ff41 = C:/Users/arashharatian/AppData/Roaming/openvibe-2.2.0/scenarios/bci-examples/ssvep/configuration/stimulation-based-epoching.cfg
Stimulations=#1.Output stream 2, Signal condition 1=#12, Signal condition 2=#13 -> CSP Spatial Filter Trainer => #14
  Train Trigger = OVTK_StimulationId_ExperimentStop
  Spatial filter configuration = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Classifiers/csp-1-1.cfg
  Filter dimension = 2
  Save as box config = true
New input=#6, New input(2)=#14, New input(1)=#10 -> FlipSwitch
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/scripts/Lua/classifier-training-flipswitch.lua
-> Player Controller
  Stimulation name = OVTK_StimulationId_Label_00
  Action to perform = Stop
