OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Generic stream reader => #0
  Filename = C:/Users/arashharatian/Desktop/zz/new naseri/ssvep-record-[2020.08.04-21.04.20].ov
#0.Output stream 2 -> Spatial Filter => #1
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/classifiers/csp-1-1.cfg
#0.Output stream 2 -> Spatial Filter => #2
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/classifiers/csp-1-2.cfg
#0.Output stream 2 -> Spatial Filter => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/classifiers/csp-1.cfg
Input 1=#2, Input 2=#1, Input 3=#3 -> Signal Merger => #4
Data=#4 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
