OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)

Scenario Control => #0
  Peripheral name = SSVEP_VRPN_StartStop@localhost:${VRPN_ExternalServerPort}
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
#0.Output 2 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
#0.Output 1 -> SSVEP Training Controller => #2
  Lua Script = C:/Users/arashharatian/Documents/Work/Repositories/Cognitive/SSVEP With OpenVibe/Scripts/Lua/training-acquisition-controller.lua
  Goal sequence = 0 1 2 1 0 2 1 0 1 2 1 0 2 0 1 2 1 2 2 0 1 2 0 1 0 0 2 1 0 2
  Stimulation duration = 7
  Break duration = 4
  Flickering delay = 1.000000
  Training Target Size = 0.3;0.3
  Training Targets' Positions = (0.0;0.5);(-0.5;0.0);(0.5;0.0)
Input stimulations 1=#2.Stimulations, Input stimulations 2=#2.New output -> Stimulation multiplexer => #3
#2.Stimulations -> Identity => #4
Input 1=#4, Input 2=#4, Input 3=#4, Input 4=#4 -> Button VRPN Server "Stimulator Control"
  Peripheral name = SSVEP_VRPN_StimulatorControl
  Button 1 ON = OVTK_StimulationId_ExperimentStart
  Button 1 OFF = OVTK_StimulationId_ExperimentStart
  Button 2 ON = OVTK_StimulationId_ExperimentStop
  Button 2 OFF = OVTK_StimulationId_ExperimentStop
  Button 3 ON = OVTK_StimulationId_VisualStimulationStart
  Button 3 OFF = OVTK_StimulationId_VisualStimulationStart
  Button 4 ON = OVTK_StimulationId_VisualStimulationStop
  Button 4 OFF = OVTK_StimulationId_VisualStimulationStop
#2.New output -> Identity => #6
Input 1=#6, Input 2=#6, Input 3=#6, Input 4=#6, Input 5=#6, Input 6=#6, Input 7=#6 -> Button VRPN Server "Target Select"
  Peripheral name = SSVEP_VRPN_Target
  Button 1 ON = OVTK_StimulationId_Label_00
  Button 1 OFF = OVTK_StimulationId_Label_00
  Button 2 ON = OVTK_StimulationId_Label_01
  Button 2 OFF = OVTK_StimulationId_Label_01
  Button 3 ON = OVTK_StimulationId_Label_02
  Button 3 OFF = OVTK_StimulationId_Label_02
  Button 4 ON = OVTK_StimulationId_Label_03
  Button 4 OFF = OVTK_StimulationId_Label_03
  Button 5 ON = OVTK_StimulationId_Label_04
  Button 5 OFF = OVTK_StimulationId_Label_04
  Button 6 ON = OVTK_StimulationId_Label_05
  Button 6 OFF = OVTK_StimulationId_Label_05
  Button 7 ON = OVTK_StimulationId_Label_06
  Button 7 OFF = OVTK_StimulationId_Label_06
Acquisition client => #8
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input Signal=#8.Signal stream, Input Stimulations=#3, Input stream 3=#8.Experiment information -> Generic stream writer
  Filename = ${Player_ScenarioDirectory}/signals/Recorded_Signal($core{date}-$core{time}).ov
  Use compression = false

Start Stimulation
  Lua Script = ${Player_ScenarioDirectory}/Scripts/Lua/start-stimulator.lua
  Delay = 1
-> Run Command
  Stimulation 1 = OVTK_StimulationId_ExperimentStart
  Command 1 = ${External_Application_Launcher} openvibe-ssvep-demo --run-bg trainer
